OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Settings
  Setting 1 = 0

Noise generator
  Channel count = 2
  Sampling frequency = 20
  Generated epoch sample count = 32
  Noise type = Gaussian
-> Simple DSP "here comes your part!" => #1
  Equation = x
-> Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/NISE/Python/python-signal-average.py
Clock stimulator => #3
  Interstimulation interval (in sec) = 20
  Stimulation = OVTK_StimulationId_Label_01
-> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_Label_01
  Command 1 = START firefox https://www.youtube.com/watch?v=cCLCuXNXeh0
Clock stimulator => #5
  Interstimulation interval (in sec) = 38
  Stimulation = OVTK_StimulationId_Label_02
-> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_Label_02
  Command 1 = TSKILL firefox
0x341d3912 Clock stimulator => #7
  Interstimulation interval (in sec) = 59
  Stimulation = OVTK_StimulationId_Label_03
Input stimulations 1=#3, Input stimulations 2=#5, Input stimulations 3=#7 -> Stimulation multiplexer => #8
Input Signal=#1, Input Stimulations=#8 -> Generic stream writer
  Filename = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/NISE/Data/test1.ov
  Use compression = false
Input stream=#1, Stimulations stream=#8 -> CSV File Writer
  Filename = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/NISE/Data/test1.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Signal=#1, Stimulations=#8 -> EDF File Writer
  Filename = C:/Users/Chris/Documents/3_Uni/1_MSc Neuroengineering/Semester 4/NISE/NISE/Data/test1.edf
#7 -> 0x341d3912 Run Command
  Stimulation 1 = OVTK_StimulationId_Label_03
  Command 1 = TSKILL firefox

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

Clock stimulator
  Interstimulation interval (in sec) = 60
  Stimulation = OVTK_StimulationId_Label_04
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_04
  Action to perform = Stop
